PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = First Experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = $(1.0000, -1.0000, -1.0000)
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    PolygonComponent target
      fillColor = white
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank You!
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  Routine instuctions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your task is  o press Y when you see a square
        Press SPACE when you are ready to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instuctions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
